<?xml version="1.0" encoding="UTF-8"?>
<apex:apex xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
  xsi:schemaLocation="http://med.kuleuven.be/exporl/apex/3.0.2/experiment https://gilbert.med.kuleuven.be/apex/schemas/3.0.2/experiment.xsd"
  xmlns:apex="http://med.kuleuven.be/exporl/apex/3.0.2/experiment" version="1">

  <!-- 
Automatically generate datablocks and stimuli using javascript
  -->

  <procedure xsi:type="apex:constantProcedureType">

    <parameters>
      <presentations>1</presentations>
      <skip>0</skip>
      <order>sequential</order>
    </parameters>

    <trials>
      <trial id="trial1">
        <answer>button1</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus_wd1.wav"/>
      </trial>
      <trial id="trial2">
        <answer>button1</answer>
        <screen id="screen1"/>
        <stimulus id="stimulus_wd2.wav"/>
      </trial>
    </trials>
  </procedure>

  <corrector xsi:type="apex:isequal"/>

  <screens>
    <screen id="screen1">
      <gridLayout width="1" height="1">
        <button id="button">
          <text>button</text>
        </button>
      </gridLayout>
      <buttongroup id="buttongroup">
        <button id="button"/>
      </buttongroup>
      <default_answer_element>buttongroup</default_answer_element>
    </screen>
  </screens>


  <datablocks>
    <plugindatablocks>
      <parameter name="path">../stimuli/*.wav</parameter>
      <parameter name="device">wavdevice</parameter>
    </plugindatablocks>
  </datablocks>

  <devices>
    <device id="wavdevice" xsi:type="apex:wavDeviceType">
      <channels>2</channels>
      <gain channel="0">-50</gain>
      <samplerate>44100</samplerate>
    </device>
  </devices>

  <filters/>

  <stimuli>
    <pluginstimuli>
      <parameter name="path">../stimuli/*.wav</parameter>
      <parameter name="prefix">stimulus_</parameter>
    </pluginstimuli>
  </stimuli>

  <general>
    <scriptlibrary>autostimulus.js</scriptlibrary>
  </general>

</apex:apex>
